opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: Polysorbate 80 serial dilution
author: Antonia
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, location: 10}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - water: {description: Type 1 ultrapure}
  - Polysorbate 80: {serialize: true}
ingredLocations:
  Corning 96 Well Plate 360 µL Flat:
    water {volume: 300}: A1
    Polysorbate 80 {volume: 300}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B1-B12
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B5
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B6
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B9
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B10
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B11
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: B1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: B1, wellLocation: {origin: bottom, offset: {z: 9.67}}}
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