opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: Polysorbate 80 CMC determination 0.02% - 10%
author: Antonia
description: PS80 in H2O
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
  p20_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, location: 10}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - water: {description: deionised}
  - Polysorbate 80 : water 10:90: {description: PS80 in H2O 10% v/v}
ingredLocations:
  Corning 96 Well Plate 360 µL Flat:
    water {volume: 300}: A1-H1
    Polysorbate 80 : water 10:90 {volume: 300}: A2-C2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: H1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 56
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: H1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 84
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: H1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: D3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 98
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: G1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: E3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 112
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: G1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: F3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 108
  path: single
  changeTip: once
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A4
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 90
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 140
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 112
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 84
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: B2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 56
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: D3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 42
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: C2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: E3
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: C2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: F3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 12
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A3
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: never
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: H1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: H1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: H1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: B3, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: B3, wellLocation: {origin: bottom, offset: {z: 9.67}}}
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