opentrons/protocol-designer 8.0.3
schemaVersion: 8
protocolName: Dye calibration curve 96 well same volumes
author: Antonia
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 300 µL (slot 10): {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 10}
  Opentrons OT-2 96 Tip Rack 20 µL: {loadName: opentrons_96_tiprack_20ul, namespace: opentrons, version: 1, location: 11}
  Eppendorf 96 Well Plate 500 µL: {loadName: eppendorf_96_wellplate_500ul, namespace: custom_beta, version: 1, location: 8}
  Corning 96 Well Plate 360 µL Flat: {loadName: corning_96_wellplate_360ul_flat, namespace: opentrons, version: 2, location: 5}
  Opentrons OT-2 96 Tip Rack 300 µL (slot 7): {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 7}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - water: {description: deionised}
  - dye 1: {description: methylene blue/fluorescein free acid/procion blue replicate 1}
  - dye 2: {description: methylene blue/fluorescein free acid/procion blue replicate 2}
  - dye 3: {description: methylene blue/fluorescein free acid/procion blue replicate 3}
ingredLocations:
  Eppendorf 96 Well Plate 500 µL:
    dye 1 {volume: 500}: A1
    water {volume: 500}: A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7
    dye 2 {volume: 500}: B1
    dye 3 {volume: 500}: C1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A2-A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2, A5, A8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 12
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: B2-B4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B2, B5, B8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 14
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: C2-C4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C2, C5, C8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 16
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: D2-D4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: D2, D5, D8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 18
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: E2-E4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: E2, E5, E8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 11
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: F2-F4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: F2, F5, F8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 11
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: F2-F4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: F2, F5, F8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 12
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: G2-G4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: G2, G5, G8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 12
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: H2-H4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: G2, G5, G8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 13
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: G2-G4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: H2, H5, H8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 13
  path: single
  changeTip: never
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: H2-H4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: H2, H5, H8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 11
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2, A5, A8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 11
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2, A5, A8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B2, B5, B8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 18
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C2, C5, C8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 16
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: D2, D5, D8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 14
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: E2, E5, E8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: F2, F5, F8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 8
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: G2, G5, G8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 6
  path: single
  changeTip: always
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A1-C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: H2, H5, H8
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A1
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 188
  path: single
  changeTip: perSource
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A2-A4
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A2, A5, A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 180
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: perSource
  aspirate_labware: Corning 96 Well Plate 360 µL Flat
  aspirate_wells: A2, A5, A8
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3, A6, A9
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 180
  path: single
  changeTip: perSource
  aspirate_labware: Eppendorf 96 Well Plate 500 µL
  aspirate_wells: A5-A7
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A3, A6, A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 280
  dispense_touchTip_checkbox: true
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/eppendorf_96_wellplate_500ul/1:
    brand: {brand: eppendorf, brandId: [0030501101]}
    metadata: {displayName: Eppendorf 96 Well Plate 500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 27.1}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: eppendorf_96_wellplate_500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 21.4, totalLiquidVolume: 500, shape: circular, diameter: 7, x: 14.4, y: 74.3, z: 5.7}
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 10, labwareId: Eppendorf 96 Well Plate 500 µL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 10, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A2, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A2, wellLocation: {origin: bottom, offset: {z: 9.67}}}
- aspirate: {pipetteId: p20_single_gen2, volume: 10, labwareId: Eppendorf 96 Well Plate 500 µL, wellName: A3, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 10, labwareId: Corning 96 Well Plate 360 µL Flat, wellName: A5, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
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